CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150910190903
GitHash:207f5bf
ModuleCount:212
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Channel Designations:', 'Refraction (REF) gives an image of entire cell outlines, such as by refraction of white light.', 'Mark (MRK) gives an image of mitochondria, such as by a fluorescent marker.', 'Target (TAR) gives an image of the target of interest, such as a fluorescent marker on a protein of interest.']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'REF': u'FileLocation', u'TAR': u'FileLocation', u'MRK': u'FileLocation'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelName "TL DIC")
    Name to assign these images:REF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "EGFP")
    Name to assign these images:MRK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "mRFP1.2")
    Name to assign these images:TAR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
SaveImages:[module_num:5|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notes:['This module saves the original image with original intensity values. Use original images for comparison of intensity values between images in the set.']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
    Select the type of image to save:Image
    Select the image to save:REF
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Extraction\\\\\\\\REF
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:6|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notes:['This module saves the original image with original intensity values. Use original images for comparison of intensity values between images in the set.']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
    Select the type of image to save:Image
    Select the image to save:MRK
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    Select method for constructing file names:From image filename
    Select image name for file prefix:MRK
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Extraction\\\\\\\\MRK
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:7|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notes:['This module saves the original image with original intensity values. Use original images for comparison of intensity values between images in the set.']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
    Select the type of image to save:Image
    Select the image to save:TAR
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    Select method for constructing file names:From image filename
    Select image name for file prefix:TAR
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Extraction\\\\\\\\TAR
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RescaleIntensity:[module_num:8|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notes:['This module rescales the intensity of the original image in a way that is not relative to the entire set of images. As a result, the relative intensities between images in the set are no longer meaningful. Only use rescaled images for visualizing segmentation results or for correlation analysis since these do not rely on comparison of intensity values between images in the set.']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
    Select the input image:REF
    Name the output image:REF_Scale
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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notes:['This module rescales the intensity of the original image in a way that is not relative to the entire set of images. As a result, the relative intensities between images in the set are no longer meaningful. Only use rescaled images for visualizing segmentation results or for correlation analysis since these do not rely on comparison of intensity values between images in the set.']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
    Select the input image:MRK
    Name the output image:MRK_Scale
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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notes:['This module rescales the intensity of the original image in a way that is not relative to the entire set of images. As a result, the relative intensities between images in the set are no longer meaningful. Only use rescaled images for visualizing segmentation results or for correlation analysis since these do not rely on comparison of intensity values between images in the set.']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
    Select the input image:TAR
    Name the output image:TAR_Scale
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:11|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notes:['This module saves the image with rescaled intensity. Only use rescaled images for visualizing segmentation results or for correlation analysis since these do not rely on comparison of intensity values between images in the set.']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
    Select the type of image to save:Image
    Select the image to save:REF_Scale
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Extraction\\\\\\\\REF_Scale
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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notes:['This module saves the image with rescaled intensity. Only use rescaled images for visualizing segmentation results or for correlation analysis since these do not rely on comparison of intensity values between images in the set.']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
    Select the type of image to save:Image
    Select the image to save:MRK_Scale
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    Select method for constructing file names:From image filename
    Select image name for file prefix:MRK
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Extraction\\\\\\\\MRK_Scale
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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notes:['This module saves the image with rescaled intensity. Only use rescaled images for visualizing segmentation results or for correlation analysis since these do not rely on comparison of intensity values between images in the set.']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
    Select the type of image to save:Image
    Select the image to save:TAR_Scale
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    Select method for constructing file names:From image filename
    Select image name for file prefix:TAR
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Extraction\\\\\\\\TAR_Scale
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Smooth:[module_num:14|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
    Select the input image:REF
    Name the output image:REF_Smooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
EnhanceEdges:[module_num:15|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
    Select the input image:REF_Smooth
    Name the output image:REF_Smooth_Edge
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Smooth:[module_num:16|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
    Select the input image:REF_Smooth_Edge
    Name the output image:REF_Smooth_Edge_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ApplyThreshold:[module_num:17|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
    Select the input image:REF_Smooth_Edge_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_1
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:2.00
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
Morph:[module_num:18|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_1
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000
    Select the operation to perform:fill small holes
    Number of times to repeat operation:Once
    Maximum hole area:10000
    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:19|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion
    Select the operation to perform:erode
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:20|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ApplyThreshold:[module_num:21|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
    Select the input image:REF_Smooth_Edge_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:3.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
EnhanceOrSuppressFeatures:[module_num:22|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_50
    Select the operation:Enhance
    Feature size:50
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:23|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_60
    Select the operation:Enhance
    Feature size:60
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:24|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_70
    Select the operation:Enhance
    Feature size:70
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:25|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_80
    Select the operation:Enhance
    Feature size:80
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:26|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_90
    Select the operation:Enhance
    Feature size:90
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:27|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_100
    Select the operation:Enhance
    Feature size:100
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:28|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_110
    Select the operation:Enhance
    Feature size:110
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:29|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_120
    Select the operation:Enhance
    Feature size:120
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:30|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_130
    Select the operation:Enhance
    Feature size:130
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:31|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_140
    Select the operation:Enhance
    Feature size:140
    Feature type:Circles
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
EnhanceOrSuppressFeatures:[module_num:32|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_50
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_50_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:33|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_60
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_60_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:34|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_70
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_70_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:35|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_80
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_80_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:36|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_90
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_90_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:37|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_100
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_100_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:38|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_110
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_110_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:39|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_120
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_120_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:40|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_130
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_130_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
EnhanceOrSuppressFeatures:[module_num:41|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_140
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_140_Texture
    Select the operation:Enhance
    Feature size:25
    Feature type:Texture
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    Smoothing scale:10
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
Smooth:[module_num:42|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_50_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_50_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:43|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_60_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_60_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:44|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_70_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_70_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:45|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_80_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_80_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:46|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_90_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_90_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:47|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_100_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_100_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:48|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_110_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_110_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:49|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_120_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_120_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:50|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_130_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_130_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:51|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_140_Texture
    Name the output image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_140_Texture_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ApplyThreshold:[module_num:52|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_50_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_50_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:53|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_60_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_60_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:54|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_70_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_70_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:55|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_80_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_80_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:56|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_90_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_90_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:57|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_100_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_100_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:58|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_110_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_110_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:59|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_120_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_120_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:60|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_130_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_130_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:61|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
    Select the input image:REF_Smooth_Edge_Smooth_Threhold_2_Ellipse_140_Texture_Smooth
    Name the output image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_140_Texture_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:27.50
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ImageMath:[module_num:62|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_Center
    Image or measurement?:Image
    Select the first image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_50_Texture_Smooth_Threshold
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_60_Texture_Smooth_Threshold
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_70_Texture_Smooth_Threshold
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_80_Texture_Smooth_Threshold
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_90_Texture_Smooth_Threshold
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_100_Texture_Smooth_Threshold
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_110_Texture_Smooth_Threshold
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_120_Texture_Smooth_Threshold
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_130_Texture_Smooth_Threshold
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_140_Texture_Smooth_Threshold
    Multiply the tenth image by:1.0
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
Morph:[module_num:63|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
    Select the input image:REF_Ellipse_Center
    Name the output image:REF_Ellipse_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:64|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
    Select the input image:REF_Ellipse_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_Center
    Typical diameter of objects, in pixel units (Min,Max):1,250
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
ExpandOrShrinkObjects:[module_num:65|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
    Select the input objects:Object_Ellipse_Center
    Name the output objects:Object_Ellipse_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:66|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
    Select the input objects:Object_Ellipse_Center_Shrink
    Name the output image:Object_Ellipse_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:67|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
IdentifyPrimaryObjects:[module_num:68|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
    Select the input image:REF_Ellipse_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
ExpandOrShrinkObjects:[module_num:69|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
    Select the input objects:Object_Cell_Center
    Name the output objects:Object_Cell_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
SaveImages:[module_num:70|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
    Select the type of image to save:Objects
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    Select the objects to save:Object_Cell_Center_Shrink
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_obj_cell_cntr
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExpandOrShrinkObjects:[module_num:71|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
    Select the input objects:Object_Cell_Center_Shrink
    Name the output objects:Object_Cell_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:15
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    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:72|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
    Select the input objects:Object_Cell_Center_Shrink_Expand
    Name the output image:Object_Cell_Center_Shrink_Expand_Image
    Select the color format:Color
    Select the colormap:Default

ImageMath:[module_num:73|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Cell_Center
    Image or measurement?:Image
    Select the first image:Object_Cell_Center_Shrink_Expand_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF
    Multiply the second image by:1.0
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
Morph:[module_num:74|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_50_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_50_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:75|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_60_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_60_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:76|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_70_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_70_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:77|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_80_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_80_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:78|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_90_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_90_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:79|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_100_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_100_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:80|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_110_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_110_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:81|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_120_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_120_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:82|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_130_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_130_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:83|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
    Select the input image:REF_Smooth_Edge_Smooth_Threshold_2_Ellipse_140_Texture_Smooth_Threshold
    Name the output image:REF_Ellipse_140_Center_Dilation
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:84|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
    Select the input image:REF_Ellipse_50_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_50_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:85|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
    Select the input image:REF_Ellipse_60_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_60_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:86|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
    Select the input image:REF_Ellipse_70_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_70_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:87|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
    Select the input image:REF_Ellipse_80_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_80_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:88|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
    Select the input image:REF_Ellipse_90_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_90_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:89|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
    Select the input image:REF_Ellipse_100_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_100_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:90|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
    Select the input image:REF_Ellipse_110_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_110_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:91|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
    Select the input image:REF_Ellipse_120_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_120_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:92|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
    Select the input image:REF_Ellipse_130_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_130_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:93|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
    Select the input image:REF_Ellipse_140_Center_Dilation
    Name the primary objects to be identified:Object_Ellipse_140_Center
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
ExpandOrShrinkObjects:[module_num:94|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
    Select the input objects:Object_Ellipse_50_Center
    Name the output objects:Object_Ellipse_50_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:95|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
    Select the input objects:Object_Ellipse_60_Center
    Name the output objects:Object_Ellipse_60_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:96|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
    Select the input objects:Object_Ellipse_70_Center
    Name the output objects:Object_Ellipse_70_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:97|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
    Select the input objects:Object_Ellipse_80_Center
    Name the output objects:Object_Ellipse_80_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:98|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
    Select the input objects:Object_Ellipse_90_Center
    Name the output objects:Object_Ellipse_90_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:99|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
    Select the input objects:Object_Ellipse_100_Center
    Name the output objects:Object_Ellipse_100_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:100|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
    Select the input objects:Object_Ellipse_110_Center
    Name the output objects:Object_Ellipse_110_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:101|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
    Select the input objects:Object_Ellipse_120_Center
    Name the output objects:Object_Ellipse_120_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:102|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
    Select the input objects:Object_Ellipse_130_Center
    Name the output objects:Object_Ellipse_130_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:103|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
    Select the input objects:Object_Ellipse_140_Center
    Name the output objects:Object_Ellipse_140_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:104|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
    Select the input objects:Object_Ellipse_50_Center_Shrink
    Name the output image:Object_Ellipse_50_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:105|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
    Select the input objects:Object_Ellipse_60_Center_Shrink
    Name the output image:Object_Ellipse_60_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:106|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
    Select the input objects:Object_Ellipse_70_Center_Shrink
    Name the output image:Object_Ellipse_70_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:107|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
    Select the input objects:Object_Ellipse_80_Center_Shrink
    Name the output image:Object_Ellipse_80_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:108|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
    Select the input objects:Object_Ellipse_90_Center_Shrink
    Name the output image:Object_Ellipse_90_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:109|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
    Select the input objects:Object_Ellipse_100_Center_Shrink
    Name the output image:Object_Ellipse_100_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:110|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
    Select the input objects:Object_Ellipse_110_Center_Shrink
    Name the output image:Object_Ellipse_110_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:111|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
    Select the input objects:Object_Ellipse_120_Center_Shrink
    Name the output image:Object_Ellipse_120_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:112|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
    Select the input objects:Object_Ellipse_130_Center_Shrink
    Name the output image:Object_Ellipse_130_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:113|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
    Select the input objects:Object_Ellipse_140_Center_Shrink
    Name the output image:Object_Ellipse_140_Center_Shrink_Image
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:114|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_50_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_50_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:115|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_60_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_60_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:116|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_70_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_70_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:117|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_80_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_80_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:118|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_90_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_90_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:119|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_100_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_100_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:120|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_110_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_110_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:121|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_120_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_120_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:122|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_130_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_130_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
ImageMath:[module_num:123|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_140_Center_Shrink_Subtraction_REF_Edge_Fill
    Image or measurement?:Image
    Select the first image:Object_Ellipse_140_Center_Shrink_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
IdentifyPrimaryObjects:[module_num:124|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
    Select the input image:REF_Ellipse_50_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_50_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:125|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
    Select the input image:REF_Ellipse_60_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_60_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:126|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
    Select the input image:REF_Ellipse_70_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_70_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:127|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
    Select the input image:REF_Ellipse_80_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_80_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:128|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
    Select the input image:REF_Ellipse_90_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_90_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:129|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
    Select the input image:REF_Ellipse_100_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_100_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:130|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
    Select the input image:REF_Ellipse_110_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_110_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:131|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
    Select the input image:REF_Ellipse_120_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_120_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:132|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
    Select the input image:REF_Ellipse_130_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_130_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:133|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
    Select the input image:REF_Ellipse_140_Center_Shrink_Subtraction_REF_Edge_Fill
    Name the primary objects to be identified:Object_Cell_140_Center
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
ExpandOrShrinkObjects:[module_num:134|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
    Select the input objects:Object_Cell_50_Center
    Name the output objects:Object_Cell_50_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:135|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
    Select the input objects:Object_Cell_60_Center
    Name the output objects:Object_Cell_60_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:136|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
    Select the input objects:Object_Cell_70_Center
    Name the output objects:Object_Cell_70_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:137|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
    Select the input objects:Object_Cell_80_Center
    Name the output objects:Object_Cell_80_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:138|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
    Select the input objects:Object_Cell_90_Center
    Name the output objects:Object_Cell_90_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:139|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
    Select the input objects:Object_Cell_100_Center
    Name the output objects:Object_Cell_100_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:140|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
    Select the input objects:Object_Cell_110_Center
    Name the output objects:Object_Cell_110_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:141|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
    Select the input objects:Object_Cell_120_Center
    Name the output objects:Object_Cell_120_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:142|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
    Select the input objects:Object_Cell_130_Center
    Name the output objects:Object_Cell_130_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:143|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
    Select the input objects:Object_Cell_140_Center
    Name the output objects:Object_Cell_140_Center_Shrink
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:144|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
    Select the input objects:Object_Cell_50_Center_Shrink
    Name the output objects:Object_Cell_50_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:25
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:145|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
    Select the input objects:Object_Cell_60_Center_Shrink
    Name the output objects:Object_Cell_60_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:146|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
    Select the input objects:Object_Cell_70_Center_Shrink
    Name the output objects:Object_Cell_70_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:35
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:147|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
    Select the input objects:Object_Cell_80_Center_Shrink
    Name the output objects:Object_Cell_80_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:40
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:148|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
    Select the input objects:Object_Cell_90_Center_Shrink
    Name the output objects:Object_Cell_90_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:45
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:149|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
    Select the input objects:Object_Cell_100_Center_Shrink
    Name the output objects:Object_Cell_100_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:50
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:150|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
    Select the input objects:Object_Cell_110_Center_Shrink
    Name the output objects:Object_Cell_110_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:55
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:151|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
    Select the input objects:Object_Cell_120_Center_Shrink
    Name the output objects:Object_Cell_120_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:60
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:152|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
    Select the input objects:Object_Cell_130_Center_Shrink
    Name the output objects:Object_Cell_130_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:65
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:153|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
    Select the input objects:Object_Cell_140_Center_Shrink
    Name the output objects:Object_Cell_140_Center_Shrink_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:70
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    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:154|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
    Select the input objects:Object_Cell_50_Center_Shrink_Expand
    Name the output image:Object_Cell_50_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:155|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
    Select the input objects:Object_Cell_60_Center_Shrink_Expand
    Name the output image:Object_Cell_60_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:156|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
    Select the input objects:Object_Cell_70_Center_Shrink_Expand
    Name the output image:Object_Cell_70_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:157|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
    Select the input objects:Object_Cell_80_Center_Shrink_Expand
    Name the output image:Object_Cell_80_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:158|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
    Select the input objects:Object_Cell_90_Center_Shrink_Expand
    Name the output image:Object_Cell_90_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:159|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
    Select the input objects:Object_Cell_100_Center_Shrink_Expand
    Name the output image:Object_Cell_100_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:160|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
    Select the input objects:Object_Cell_110_Center_Shrink_Expand
    Name the output image:Object_Cell_110_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:161|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
    Select the input objects:Object_Cell_120_Center_Shrink_Expand
    Name the output image:Object_Cell_120_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:162|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
    Select the input objects:Object_Cell_130_Center_Shrink_Expand
    Name the output image:Object_Cell_130_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:163|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
    Select the input objects:Object_Cell_140_Center_Shrink_Expand
    Name the output image:Object_Cell_140_Center_Shrink_Expand_Image
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:164|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Ellipse_Area
    Image or measurement?:Image
    Select the first image:Object_Cell_50_Center_Shrink_Expand_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Object_Cell_60_Center_Shrink_Expand_Image
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Object_Cell_70_Center_Shrink_Expand_Image
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Object_Cell_80_Center_Shrink_Expand_Image
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Object_Cell_90_Center_Shrink_Expand_Image
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Object_Cell_100_Center_Shrink_Expand_Image
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Object_Cell_110_Center_Shrink_Expand_Image
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Object_Cell_120_Center_Shrink_Expand_Image
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Object_Cell_130_Center_Shrink_Expand_Image
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Object_Cell_140_Center_Shrink_Expand_Image
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:165|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Cell_Area
    Image or measurement?:Image
    Select the first image:REF_Ellipse_Area
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Smooth_Edge_Smooth_Threshold_1_Fill_10000_Erosion_Inversion
    Multiply the second image by:-1.0
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
IdentifySecondaryObjects:[module_num:166|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
    Select the input objects:Object_Cell_Center_Shrink
    Name the objects to be identified:Object_Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:REF_Cell_Area
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    Regularization factor:0.05
    Name the outline image:Object_Cell_Outline
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Object_Cell_Center_Border
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.5
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
SaveImages:[module_num:167|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
    Select the type of image to save:Objects
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    Select the objects to save:Object_Cell
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_obj_cell
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExpandOrShrinkObjects:[module_num:168|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
    Select the input objects:Object_Cell_Center_Border
    Name the output objects:Object_Cell_Center_Border_Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:15
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    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:169|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
    Select the input objects:Object_Cell_Center_Border_Expand
    Name the output image:Object_Cell_Center_Border_Expand_Image
    Select the color format:Color
    Select the colormap:Default

ImageMath:[module_num:170|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:REF_Cell_Center_Border_Expand
    Image or measurement?:Image
    Select the first image:Object_Cell_Center_Border_Expand_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:REF_Scale
    Multiply the second image by:1.0
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
OverlayOutlines:[module_num:171|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:REF_Cell_Center_Border_Expand
    Name the output image:REF_Object_Cell_Outline
    Outline display mode:Color
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    Width of outlines:5
    Select outlines to display:Object_Cell_Outline
    Select outline color:#00FF40
    Load outlines from an image or objects?:Image
    Select objects to display:Object_Cell_Interior

SaveImages:[module_num:172|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
    Select the type of image to save:Image
    Select the image to save:REF_Object_Cell_Outline
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_REF_obj_cell_outline
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:173|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
    Select objects to measure:Object_Cell
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:174|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
    Select the input objects:Object_Cell
    Name the output image:Object_Cell_Image
    Select the color format:Color
    Select the colormap:Default

DisplayDataOnImage:[module_num:175|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
    Display object or image measurements?:Object
    Select the input objects:Object_Cell
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:Object_Cell_Image
    Text color:white
    Name the output image that has the measurements displayed:Object_Cell_Image_Data_Area
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:176|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notes:['This module filters segmentations regions for cells by area.']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
    Name the output objects:Object_Cell_Filter_Area
    Select the object to filter:Object_Cell
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1500
    Filter using a maximum measurement value?:Yes
    Maximum value:19000

MeasureObjectIntensity:[module_num:177|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
    Hidden:1
    Select an image to measure:MRK_Scale
    Select objects to measure:Object_Cell_Filter_Area

ConvertObjectsToImage:[module_num:178|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
    Select the input objects:Object_Cell_Filter_Area
    Name the output image:Object_Cell_Filter_Area_Image
    Select the color format:Color
    Select the colormap:Default

DisplayDataOnImage:[module_num:179|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
    Display object or image measurements?:Object
    Select the input objects:Object_Cell_Filter_Area
    Measurement to display:Intensity_MaxIntensity_MRK_Scale
    Select the image on which to display the measurements:Object_Cell_Filter_Area_Image
    Text color:white
    Name the output image that has the measurements displayed:Object_Cell_Filter_Area_Image_Data_Intensity_MRK
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:180|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notes:['This module filters segmentation regions for cells by the intensity of the MRK channel within those regions. Note that the intensity comes from the rescaled MRK image.']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
    Name the output objects:Object_Cell_Filter_Area_Intensity_MRK
    Select the object to filter:Object_Cell_Filter_Area
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_MRK_Scale
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectIntensity:[module_num:181|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
    Hidden:1
    Select an image to measure:TAR_Scale
    Select objects to measure:Object_Cell_Filter_Area_Intensity_MRK

ConvertObjectsToImage:[module_num:182|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
    Select the input objects:Object_Cell_Filter_Area_Intensity_MRK
    Name the output image:Object_Cell_Filter_Area_Intensity_MRK_Image
    Select the color format:Color
    Select the colormap:Default

DisplayDataOnImage:[module_num:183|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
    Display object or image measurements?:Object
    Select the input objects:Object_Cell_Filter_Area_Intensity_MRK
    Measurement to display:Intensity_MaxIntensity_TAR_Scale
    Select the image on which to display the measurements:Object_Cell_Filter_Area_Intensity_MRK_Image
    Text color:white
    Name the output image that has the measurements displayed:Object_Cell_Filter_Area_Intensity_MRK_Image_Data_Intensity_TAR
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:184|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notes:['This module filters segmentation regions for cells by the intensity of the TAR channel within those regions. Note that the intensity comes from the rescaled TAR image.']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
    Name the output objects:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Select the object to filter:Object_Cell_Filter_Area_Intensity_MRK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:Object_Cell_Filter_Area_Intensity_MRK_TAR_Outline
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_TAR_Scale
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

SaveImages:[module_num:185|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notes:['This module saves the set of objects that are primarily useful as segmentation regions for cells without consideration for segmentation regions for mitochondria. These segmentation regions passed filters for cellular area and intensity of images in MRK and TAR channels. Use these regions for measurement of entire cellular regions without consideration of mitochondrial regions.']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
    Select the type of image to save:Objects
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    Select the objects to save:Object_Cell_Filter_Area_Intensity_MRK_TAR
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_obj_cell_filtr_area_int_MRK_TAR
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:186|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:REF_Cell_Center_Border_Expand
    Name the output image:REF_Object_Cell_Filter_Area_Intensity_MRK_TAR_Outline
    Outline display mode:Color
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    Width of outlines:5
    Select outlines to display:Object_Cell_Filter_Area_Intensity_MRK_TAR_Outline
    Select outline color:#00FF40
    Load outlines from an image or objects?:Image
    Select objects to display:Object_Cell_Interior

SaveImages:[module_num:187|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
    Select the type of image to save:Image
    Select the image to save:REF_Object_Cell_Filter_Area_Intensity_MRK_TAR_Outline
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_REF_obj_cell_filtr_area_int_MRK_TAR_outline
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConserveMemory:[module_num:188|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
    Specify which images?:Images to keep
    Select image to keep:REF
    Select image to keep:MRK
    Select image to keep:TAR
    Select image to keep:REF_Scale
    Select image to keep:MRK_Scale
    Select image to keep:TAR_Scale

Smooth:[module_num:189|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
    Select the input image:MRK
    Name the output image:MRK_Smooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
EnhanceOrSuppressFeatures:[module_num:190|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
    Select the input image:MRK_Smooth
    Name the output image:MRK_Smooth_Feature
    Select the operation:Enhance
    Feature size:50
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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
Smooth:[module_num:191|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
    Select the input image:MRK_Smooth_Feature
    Name the output image:MRK_Smooth_Feature_Smooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ApplyThreshold:[module_num:192|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
    Select the input image:MRK_Smooth_Feature_Smooth
    Name the output image:MRK_Smooth_Feature_Smooth_Threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
Morph:[module_num:193|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
    Select the input image:MRK_Smooth_Feature_Smooth_Threshold
    Name the output image:MRK_Smooth_Feature_Smooth_Threshold_Inversion
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ConvertObjectsToImage:[module_num:194|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
    Select the input objects:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Name the output image:Object_Cell_Filter_Area_Intensity_MRK_TAR_Image
    Select the color format:Grayscale
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
ImageMath:[module_num:195|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Object_Cell_Filter_Area_Intensity_MRK_TAR_Image_MRK
    Image or measurement?:Image
    Select the first image:Object_Cell_Filter_Area_Intensity_MRK_TAR_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MRK_Smooth_Feature_Smooth_Threshold_Inversion
    Multiply the second image by:-1.0
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
IdentifyPrimaryObjects:[module_num:196|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
    Select the input image:Object_Cell_Filter_Area_Intensity_MRK_TAR_Image_MRK
    Name the primary objects to be identified:Object_Mitochondrion_Test
    Typical diameter of objects, in pixel units (Min,Max):10,500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
    Suppress local maxima that are closer than this minimum allowed distance:25.0
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:500
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.01
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
IdentifyPrimaryObjects:[module_num:197|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
    Select the input image:MRK_Smooth_Feature_Smooth_Threshold
    Name the primary objects to be identified:Object_Mitochondrion
    Typical diameter of objects, in pixel units (Min,Max):5,500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Name the outline image:Object_Mitochondrion_Outline
    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:500
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
OverlayOutlines:[module_num:198|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MRK_Scale
    Name the output image:MRK_Object_Mitochondrion_Outline
    Outline display mode:Color
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    Width of outlines:3
    Select outlines to display:Object_Mitochondrion_Outline
    Select outline color:red
    Load outlines from an image or objects?:Image
    Select objects to display:Object_Mitochondria_Cell

SaveImages:[module_num:199|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
    Select the type of image to save:Image
    Select the image to save:MRK_Object_Mitochondrion_Outline
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    Select method for constructing file names:From image filename
    Select image name for file prefix:MRK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MRK_obj_mito_outline
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Mitochondrion
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RelateObjects:[module_num:200|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
    Select the input child objects:Object_Mitochondrion
    Select the input parent objects:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ReassignObjectNumbers:[module_num:201|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
    Select the input objects:Object_Mitochondrion
    Name the new objects:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR
    Operation:Unify
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    Retain outlines of the relabeled objects?:No
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    Unification method:Per-parent
    Select the parent object:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Output object type:Disconnected

RelateObjects:[module_num:202|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
    Select the input child objects:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR
    Select the input parent objects:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:203|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
    Name the output objects:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Select the object to filter:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:204|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
    Select the input child objects:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR
    Select the input parent objects:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ReassignObjectNumbers:[module_num:205|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
    Select the input objects:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR
    Name the new objects:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Operation:Unify
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    Retain outlines of the relabeled objects?:No
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    Unification method:Per-parent
    Select the parent object:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Output object type:Disconnected

RelateObjects:[module_num:206|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
    Select the input child objects:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Select the input parent objects:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
SaveImages:[module_num:207|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notes:['This module saves the set of objects that are primarily useful as segmentation regions for mitochondria. These cellular regions associate with cellular regions as parents. Use these regions for measurements that consider mitochondrial regions.']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
    Select the type of image to save:Objects
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    Select the objects to save:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
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    Select method for constructing file names:From image filename
    Select image name for file prefix:MRK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_obj_mito_cell_filtr_area_int_MRK_TAR_child_mito
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Mitochondrion
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:208|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notes:['This module saves the set of objects that are primarily useful as segmentation regions for cells with consideration for segmentation regions for mitochondria. These segmentation regions passed filters for cellular area, intensity of images in MRK and TAR channels, and inclusion of mitochondrial regions. These cellular regions associate with mitochondrial regions as children. Use these regions for measurements that consider mitochondrial regions.']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
    Select the type of image to save:Objects
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    Select the objects to save:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
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    Select method for constructing file names:From image filename
    Select image name for file prefix:REF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_obj_cell_filtr_area_int_MRK_TAR_child_mito
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Segmentation_Mitochondrion
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:209|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
    Select objects to measure:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Select objects to measure:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Select objects to measure:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:210|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
    Hidden:2
    Select an image to measure:MRK
    Select an image to measure:TAR
    Select objects to measure:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Select objects to measure:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Select objects to measure:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion

MeasureCorrelation:[module_num:211|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
    Hidden:2
    Hidden:1
    Select an image to measure:MRK
    Select an image to measure:TAR
    Select where to measure correlation:Within objects
    Select an object to measure:Object_Cell_Filter_Area_Intensity_MRK_TAR

ExportToSpreadsheet:[module_num:212|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Process\\\\\\\\Measurement
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion|Number_Object_Number,Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion|Intensity_MeanIntensity_TAR,Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion|Intensity_MeanIntensity_MRK,Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion|Intensity_IntegratedIntensity_TAR,Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion|Intensity_IntegratedIntensity_MRK,Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion|AreaShape_Area,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Object_Cell_Filter_Area_Intensity_MRK_TAR
    Combine these object measurements with those of the previous object?:No
    File name:cell_region.txt
    Use the object name for the file name?:No
    Data to export:Object_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Combine these object measurements with those of the previous object?:No
    File name:cell_with_mito_region.txt
    Use the object name for the file name?:No
    Data to export:Object_Mitochondrion_Cell_Filter_Area_Intensity_MRK_TAR_Children_Mitochondrion
    Combine these object measurements with those of the previous object?:Yes
    File name:mito_region.txt
    Use the object name for the file name?:No
